<?xml version="1.0" encoding="UTF-8"?>
<msg:GetMdibResponse
	xmlns:ext="http://standards.ieee.org/downloads/11073/11073-10207-2017/extension"
	xmlns:fn="http://www.w3.org/2005/xpath-functions"
	xmlns:fo="http://www.w3.org/1999/XSL/Format"
	xmlns:m="http://www.draeger.com/CTEM"
	xmlns:msg="http://standards.ieee.org/downloads/11073/11073-10207-2017/message"
	xmlns:pm="http://standards.ieee.org/downloads/11073/11073-10207-2017/participant"
	xmlns:pme="urn:oid:1.3.6.1.4.1.3592.2.6933.1.1"
	xmlns:ps="http://schemas.microsoft.com/powershell/2004/04"
	xmlns:xs="http://www.w3.org/2001/XMLSchema"
	xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
	xsi:schemaLocation="http://standards.ieee.org/downloads/11073/11073-10207-2017/participant BICEPS_ParticipantModel.xsd
        		 http://standards.ieee.org/downloads/11073/11073-10207-2017/message BICEPS_MessageModel.xsd
        		 http://standards.ieee.org/downloads/11073/11073-10207-2017/extension ExtensionPoint.xsd"
	SequenceId="urn:oid:1">
	<msg:Mdib SequenceId="urn:oid:1">
	
		<pm:MdDescription>
			<pm:Mds Handle="mds0" SafetyClassification="MedA">
				<pm:Type Code="130535"> <!-- 1:64.999 -->
						<pm:ConceptDescription Lang="en-US">not settable metrics</pm:ConceptDescription>
				</pm:Type>			
				<pm:AlertSystem SafetyClassification="MedA" Handle="asy.mds0" SelfCheckPeriod="PT5S">
					<pm:AlertCondition Handle="ac0.mds0"
							xsi:type="pm:AlertConditionDescriptor"
							SafetyClassification="MedA" Kind="Phy" Priority="Me">
							<pm:Type Code="262108‬"> <!-- 3:65.500 -->
								<pm:ConceptDescription Lang="en-US">dummy condition</pm:ConceptDescription>
							</pm:Type>
							<pm:Source>mds0</pm:Source>
					</pm:AlertCondition>
					<pm:AlertSignal Handle="as0.mds0" ConditionSignaled="ac0.mds0" Manifestation="Aud" Latching="false" SafetyClassification="MedA" />
					<pm:AlertSignal SafetyClassification="MedA" Handle="AS.Vis.NORMALPRIOCOLORLATCHED.Limit.DESAT.SpO2.Measuredvalue.2F.44A5.39663.11566" ConditionSignaled="Limit.DESAT.SpO2.Measuredvalue.2F.44A5.39663" Manifestation="Vis" Latching="true" AcknowledgementSupported="false">
						<pm:Type Code="194086">
						<pm:ConceptDescription Version="0"/>
						<pm:Translation Code="194086" CodingSystem="urn:oid:1.3.6.1.4.1.3592.2.1.2.1"/>
						</pm:Type>
					</pm:AlertSignal>
				</pm:AlertSystem>			
				<pm:Sco Handle="sco.mds0">
					<pm:Operation Handle="actop.mds0_sco_0"
						xsi:type="pm:ActivateOperationDescriptor"
						SafetyClassification="MedC" OperationTarget="mds0"
						MaxTimeToFinish="PT1S" Retriggerable="true" AccessLevel="Usr">
						<pm:Type Code="196279"> <!-- 2:65.207 -->
							<pm:ConceptDescription Lang="en-US">dummy activate operation</pm:ConceptDescription>
						</pm:Type>
					</pm:Operation>
					<pm:Operation xsi:type="pm:SetContextStateOperationDescriptor" Handle="ensemble.mds0_sco0" OperationTarget="EN.mds0">
						<pm:Type Code="1234567">
						  <pm:ConceptDescription Lang="en-US">An operation to set the ensemble context of this device</pm:ConceptDescription>
						</pm:Type>
					</pm:Operation>


				</pm:Sco>				
				<pm:SystemContext Handle="SC.mds0">
					<pm:PatientContext Handle="PC.mds0" />
					<pm:LocationContext Handle="LC.mds0" />
					<pm:EnsembleContext Handle="EN.mds0" />
				</pm:SystemContext>				
				<pm:Clock Handle="CL.mds0">
					<pm:TimeProtocol Code="532224">
						<pm:ConceptDescription Lang="en-us">None
						</pm:ConceptDescription>
					</pm:TimeProtocol>
					<pm:TimeProtocol Code="532225">
						<pm:ConceptDescription Lang="en-us">NTPv4
						</pm:ConceptDescription>
					</pm:TimeProtocol>
					<pm:TimeProtocol Code="532234">
						<pm:ConceptDescription Lang="en-us">EBWW
						</pm:ConceptDescription>
					</pm:TimeProtocol>
				</pm:Clock>			
				<pm:Vmd Handle="vmd0" SafetyClassification="MedA">
					<pm:Type Code="130536"> <!-- 1:65.000 -->
						<pm:ConceptDescription Lang="en-US">not settable metrics</pm:ConceptDescription>
					</pm:Type>					
					<pm:AlertSystem SafetyClassification="MedA" Handle="asy.vmd0" SelfCheckPeriod="PT5S">
						<pm:AlertCondition Handle="ac0.vmd0.mds0"
								xsi:type="pm:AlertConditionDescriptor"
								SafetyClassification="MedA" Kind="Phy" Priority="Me">
								<pm:Type Code="262108‬"> <!-- 3:65.500 -->
									<pm:ConceptDescription Lang="en-US">dummy condition</pm:ConceptDescription>
								</pm:Type>
								<pm:Source>mds0</pm:Source>
						</pm:AlertCondition>
						<pm:AlertSignal Handle="as0.vmd0.mds0" ConditionSignaled="ac0.vmd0.mds0" Manifestation="Aud" Latching="false" SafetyClassification="MedA" />
					</pm:AlertSystem>
					<pm:Sco Handle="sco.vmd0"></pm:Sco>				
					<pm:Channel Handle="ch0.vmd0"
						SafetyClassification="MedA">
						<pm:Type Code="130637"> <!-- 1:65.101 -->
							<pm:ConceptDescription Lang="en-US">static not settable metrics</pm:ConceptDescription>
						</pm:Type>
						<pm:Metric Handle="numeric.ch0.vmd0"
							SafetyClassification="MedA" xsi:type="pm:NumericMetricDescriptor"
							MetricCategory="Set" MetricAvailability="Intr" Resolution="0.1">
							<pm:Type Code="196174"> <!-- 2:65.102 -->
								<pm:ConceptDescription Lang="en-US">dummy static numeric metric</pm:ConceptDescription>
							</pm:Type>
							<pm:Unit Code="262656"> <!-- MDC_DIM_DIMLESS = 4:512 -->
								<pm:ConceptDescription Lang="en-US">no unit</pm:ConceptDescription>
							</pm:Unit>
							<pm:TechnicalRange Upper="100" Lower="1"
								StepWidth="1" />
						</pm:Metric>

						<pm:Metric Handle="enumstring.ch0.vmd0"
							SafetyClassification="MedA"
							xsi:type="pm:EnumStringMetricDescriptor" MetricCategory="Set"
							MetricAvailability="Intr">
							<pm:Type Code="196175"> <!-- 2:65.103 -->
								<pm:ConceptDescription Lang="en-US">dummy static enum string metric</pm:ConceptDescription>
							</pm:Type>
							<pm:Unit Code="262656"> <!-- MDC_DIM_DIMLESS = 4:512 -->
								<pm:ConceptDescription Lang="en-US">no unit</pm:ConceptDescription>
							</pm:Unit>
							<pm:AllowedValue>
								<pm:Value>ON</pm:Value>
								<pm:Type Code="192834">
									<pm:ConceptDescription Lang="en-US">ON</pm:ConceptDescription>
								</pm:Type>
							</pm:AllowedValue>
							<pm:AllowedValue>
								<pm:Value>OFF</pm:Value>
								<pm:Type Code="192835">
									<pm:ConceptDescription Lang="en-US">OFF</pm:ConceptDescription>
								</pm:Type>
							</pm:AllowedValue>
						</pm:Metric>

						<pm:Metric Handle="string.ch0.vmd0"
							SafetyClassification="MedA" xsi:type="pm:StringMetricDescriptor"
							MetricCategory="Set" MetricAvailability="Intr">
							<pm:Type Code="196176"> <!-- 2:65.104 -->
								<pm:ConceptDescription Lang="en-US">dummy static string metric</pm:ConceptDescription>
							</pm:Type>
							<pm:Unit Code="262656"> <!-- MDC_DIM_DIMLESS = 4:512 -->
								<pm:ConceptDescription Lang="en-US">no unit</pm:ConceptDescription>
							</pm:Unit>
						</pm:Metric>
					</pm:Channel>
					<pm:Channel Handle="ch1.vmd0"
						SafetyClassification="MedA">
						<pm:Type Code="130537"> <!-- 1:65.001 -->
							<pm:ConceptDescription Lang="en-US">dynamic (periodic changed) not settable metrics</pm:ConceptDescription>
						</pm:Type>
						<pm:Metric Handle="numeric.ch1.vmd0"
							SafetyClassification="MedA" xsi:type="pm:NumericMetricDescriptor"
							MetricCategory="Msrmt" MetricAvailability="Cont" Resolution="0.1">
							<pm:Type Code="196074"> <!-- 2:65.002 -->
								<pm:ConceptDescription Lang="en-US">dummy dynamic numeric metric</pm:ConceptDescription>
							</pm:Type>
							<pm:Unit Code="262656"> <!-- MDC_DIM_DIMLESS = 4:512 -->
								<pm:ConceptDescription Lang="en-US">no unit</pm:ConceptDescription>
							</pm:Unit>
							<pm:TechnicalRange Upper="100" Lower="1"
								StepWidth="1" />
						</pm:Metric>

						<pm:Metric Handle="enumstring2.ch0.vmd0"
							SafetyClassification="MedA"
							xsi:type="pm:EnumStringMetricDescriptor" MetricCategory="Clc"
							MetricAvailability="Cont">
							<pm:Type Code="196075"> <!-- 2:65.003 -->
								<pm:ConceptDescription Lang="en-US">dummy dynamic enum string metric</pm:ConceptDescription>
							</pm:Type>
							<pm:Unit Code="262656"> <!-- MDC_DIM_DIMLESS = 4:512 -->
								<pm:ConceptDescription Lang="en-US">no unit</pm:ConceptDescription>
							</pm:Unit>
							<pm:AllowedValue>
								<pm:Value>ON</pm:Value>
								<pm:Type Code="192834">
									<pm:ConceptDescription Lang="en-US">ON</pm:ConceptDescription>
								</pm:Type>
							</pm:AllowedValue>
							<pm:AllowedValue>
								<pm:Value>OFF</pm:Value>
								<pm:Type Code="192835">
									<pm:ConceptDescription Lang="en-US">OFF</pm:ConceptDescription>
								</pm:Type>
							</pm:AllowedValue>
						</pm:Metric>

						<pm:Metric Handle="string2.ch0.vmd1"
							SafetyClassification="MedA" xsi:type="pm:StringMetricDescriptor"
							MetricCategory="Clc" MetricAvailability="Cont">
							<pm:Type Code="196076"> <!-- 2:65.004 -->
								<pm:ConceptDescription Lang="en-US">dummy static string metric</pm:ConceptDescription>
							</pm:Type>
							<pm:Unit Code="262656"> <!-- MDC_DIM_DIMLESS = 4:512 -->
								<pm:ConceptDescription Lang="en-US">no unit</pm:ConceptDescription>
							</pm:Unit>
						</pm:Metric>



					</pm:Channel>

					
					
				</pm:Vmd>

				<pm:Vmd Handle="Pulseoximeter.VMD.2D.3505" SafetyClassification="MedA">
					<pm:Type Code="69642">
						<pm:ConceptDescription Version="0" Ref="ref:0x263:3003"/>
					</pm:Type>
					<pm:AlertSystem SafetyClassification="MedA" Handle="Asy.2868" SelfCheckPeriod="PT3S" MaxPhysiologicalParallelAlarms="5" MaxTechnicalParallelAlarms="24">
						<pm:AlertCondition Handle="Limit.DESAT.SpO2.Measuredvalue.2F.44A5.39663" SafetyClassification="MedA" Kind="Phy" Priority="Hi" xsi:type="pm:LimitAlertConditionDescriptor">
						<pm:Type Code="199854">
							<pm:ConceptDescription Version="0" Ref="ref:0x26b:128"/>
						</pm:Type>
						<pm:Source>SpO2.Measuredvalue.2F.44A5</pm:Source>
						<pm:MaxLimits/>
						</pm:AlertCondition>
						<pm:AlertCondition Handle="AC.DESATINDEXALARMABSENT.SPO2.Channel.2E.3EA1.40000" SafetyClassification="MedA" Kind="Tec" Priority="None">
						<pm:Type Code="197610">
							<pm:ConceptDescription Version="0" Ref="ref:0x26b:8459"/>
						</pm:Type>
						<pm:Source>SPO2.Channel.2E.3EA1</pm:Source>
						</pm:AlertCondition>
						<pm:AlertCondition Handle="Limit.HIGTLIM.SpO2.Measuredvalue.2F.44A5.28347" SafetyClassification="MedA" Kind="Phy" Priority="Me" xsi:type="pm:LimitAlertConditionDescriptor">
						<pm:Type Code="196650">
							<pm:ConceptDescription Version="0" Ref="ref:0x26b:112"/>
						</pm:Type>
						<pm:Source>SpO2.Measuredvalue.2F.44A5</pm:Source>
						<pm:MaxLimits/>
						</pm:AlertCondition>
						<pm:AlertCondition Handle="Limit.LOLTLIM.SpO2.Measuredvalue.2F.44A5.36029" SafetyClassification="MedA" Kind="Phy" Priority="Me" xsi:type="pm:LimitAlertConditionDescriptor">
						<pm:Type Code="196672">
							<pm:ConceptDescription Version="0" Ref="ref:0x26b:116"/>
						</pm:Type>
						<pm:Source>SpO2.Measuredvalue.2F.44A5</pm:Source>
						<pm:MaxLimits/>
						</pm:AlertCondition>
						<pm:AlertCondition Handle="Limit.HIGTLIM.PLS.Measuredvalue.30.BC7.44480" SafetyClassification="MedA" Kind="Phy" Priority="Me" xsi:type="pm:LimitAlertConditionDescriptor">
						<pm:Type Code="196650">
							<pm:ConceptDescription Version="0" Ref="ref:0x26b:120"/>
						</pm:Type>
						<pm:Source>PLS.Measuredvalue.30.BC7</pm:Source>
						<pm:MaxLimits/>
						</pm:AlertCondition>
						<pm:AlertCondition Handle="Limit.LOLTLIM.PLS.Measuredvalue.30.BC7.48321" SafetyClassification="MedA" Kind="Phy" Priority="Me" xsi:type="pm:LimitAlertConditionDescriptor">
						<pm:Type Code="196672">
							<pm:ConceptDescription Version="0" Ref="ref:0x26b:124"/>
						</pm:Type>
						<pm:Source>PLS.Measuredvalue.30.BC7</pm:Source>
						<pm:MaxLimits/>
						</pm:AlertCondition>
						<pm:AlertCondition Handle="AC.RANGEUNDER.PLS.Measuredvalue.30.BC7.33213" SafetyClassification="MedA" Kind="Tec" Priority="Me">
						<pm:Type Code="196776">
							<pm:ConceptDescription Version="0" Ref="ref:0x26b:166"/>
						</pm:Type>
						<pm:Source>PLS.Measuredvalue.30.BC7</pm:Source>
						</pm:AlertCondition>
						<pm:AlertCondition Handle="AC.RANGEOVER.PLS.Measuredvalue.30.BC7.40895" SafetyClassification="MedA" Kind="Tec" Priority="Me">
						<pm:Type Code="196774">
							<pm:ConceptDescription Version="0" Ref="ref:0x26b:170"/>
						</pm:Type>
						<pm:Source>PLS.Measuredvalue.30.BC7</pm:Source>
						</pm:AlertCondition>
						<pm:AlertCondition Handle="AC.SENSOROFF.SPO2.Channel.2E.3EA1.55556" SafetyClassification="MedA" Kind="Tec" Priority="Lo">
						<pm:Type Code="198040">
							<pm:ConceptDescription Version="0" Ref="ref:0x26b:178"/>
						</pm:Type>
						<pm:Source>SPO2.Channel.2E.3EA1</pm:Source>
						</pm:AlertCondition>
						<pm:AlertCondition Handle="AC.ADVISSENSORCHK.SPO2.Channel.2E.3EA1.13624" SafetyClassification="MedA" Kind="Tec" Priority="Lo">
						<pm:Type Code="203304">
							<pm:ConceptDescription Version="0" Ref="ref:0x26b:180"/>
						</pm:Type>
						<pm:Source>SPO2.Channel.2E.3EA1</pm:Source>
						</pm:AlertCondition>
						<pm:AlertCondition Handle="AC.SENSORDISCONN.SPO2.Channel.2E.3EA1.2100" SafetyClassification="MedA" Kind="Tec" Priority="Lo">
						<pm:Type Code="196916">
							<pm:ConceptDescription Version="0" Ref="ref:0x26b:182"/>
						</pm:Type>
						<pm:Source>SPO2.Channel.2E.3EA1</pm:Source>
						</pm:AlertCondition>
						<pm:AlertCondition Handle="AC.SENSOREXPIRED.SPO2.Channel.2E.3EA1.4917" SafetyClassification="MedA" Kind="Tec" Priority="None">
						<pm:Type Code="198028">
							<pm:ConceptDescription Version="0" Ref="ref:0x26b:184"/>
						</pm:Type>
						<pm:Source>SPO2.Channel.2E.3EA1</pm:Source>
						</pm:AlertCondition>
						<pm:AlertCondition Handle="AC.SENSOREXPIRINGSOON.SPO2.Channel.2E.3EA1.13368" SafetyClassification="MedA" Kind="Tec" Priority="None">
						<pm:Type Code="198030">
							<pm:ConceptDescription Version="0" Ref="ref:0x26b:186"/>
						</pm:Type>
						<pm:Source>SPO2.Channel.2E.3EA1</pm:Source>
						</pm:AlertCondition>
						<pm:AlertCondition Handle="AC.CABLEEXPIRED.SPO2.Channel.2E.3EA1.16697" SafetyClassification="MedA" Kind="Tec" Priority="None">
						<pm:Type Code="197516">
							<pm:ConceptDescription Version="0" Ref="ref:0x26b:188"/>
						</pm:Type>
						<pm:Source>SPO2.Channel.2E.3EA1</pm:Source>
						</pm:AlertCondition>
						<pm:AlertCondition Handle="AC.CABLEEXPIRINGSOON.SPO2.Channel.2E.3EA1.59697" SafetyClassification="MedA" Kind="Tec" Priority="None">
						<pm:Type Code="197518">
							<pm:ConceptDescription Version="0" Ref="ref:0x26b:190"/>
						</pm:Type>
						<pm:Source>SPO2.Channel.2E.3EA1</pm:Source>
						</pm:AlertCondition>
						<pm:AlertCondition Handle="AC.CABLEREPLACENEXTPATIENT.SPO2.Channel.2E.3EA1.5173" SafetyClassification="MedA" Kind="Tec" Priority="None">
						<pm:Type Code="197530">
							<pm:ConceptDescription Version="0" Ref="ref:0x26b:192"/>
						</pm:Type>
						<pm:Source>SPO2.Channel.2E.3EA1</pm:Source>
						</pm:AlertCondition>
						<pm:AlertCondition Handle="AC.SENSORREPLACENEXTPATIENT.SPO2.Channel.2E.3EA1.7990" SafetyClassification="MedA" Kind="Tec" Priority="None">
						<pm:Type Code="198046">
							<pm:ConceptDescription Version="0" Ref="ref:0x26b:194"/>
						</pm:Type>
						<pm:Source>SPO2.Channel.2E.3EA1</pm:Source>
						</pm:AlertCondition>
						<pm:AlertCondition Handle="AC.SENSORMALF.SPO2.Channel.2E.3EA1.10551" SafetyClassification="MedA" Kind="Tec" Priority="Lo">
						<pm:Type Code="196918">
							<pm:ConceptDescription Version="0" Ref="ref:0x26b:196"/>
						</pm:Type>
						<pm:Source>SPO2.Channel.2E.3EA1</pm:Source>
						</pm:AlertCondition>
						<pm:AlertCondition Handle="AC.FAIL.SPO2.Channel.2E.3EA1.31037" SafetyClassification="MedA" Kind="Tec" Priority="Lo">
						<pm:Type Code="196646">
							<pm:ConceptDescription Version="0" Ref="ref:0x26b:198"/>
						</pm:Type>
						<pm:Source>SPO2.Channel.2E.3EA1</pm:Source>
						</pm:AlertCondition>
						<pm:AlertCondition Handle="AC.CABLEFAIL.SPO2.Channel.2E.3EA1.62514" SafetyClassification="MedA" Kind="Tec" Priority="Lo">
						<pm:Type Code="258794">
							<pm:ConceptDescription Version="0" Ref="ref:0x26b:200"/>
							<pm:Translation Code="258794" CodingSystem="urn:oid:1.3.6.1.4.1.3592.2.1.2.1"/>
						</pm:Type>
						<pm:Source>SPO2.Channel.2E.3EA1</pm:Source>
						</pm:AlertCondition>
						<pm:AlertCondition Handle="AC.STATCALIBRUNNING.SPO2.Channel.2E.3EA1.16185" SafetyClassification="MedA" Kind="Tec" Priority="None">
						<pm:Type Code="202762">
							<pm:ConceptDescription Version="0" Ref="ref:0x26b:202"/>
						</pm:Type>
						<pm:Source>SPO2.Channel.2E.3EA1</pm:Source>
						</pm:AlertCondition>
						<pm:AlertCondition Handle="AC.SENSORUNRECOGNIZED.SPO2.Channel.2E.3EA1.58373" SafetyClassification="MedA" Kind="Tec" Priority="Lo">
						<pm:Type Code="198050">
							<pm:ConceptDescription Version="0" Ref="ref:0x26b:208"/>
						</pm:Type>
						<pm:Source>SPO2.Channel.2E.3EA1</pm:Source>
						</pm:AlertCondition>
						<pm:AlertCondition Handle="AC.CABLEUNRECOGNIZED.SPO2.Channel.2E.3EA1.25404" SafetyClassification="MedA" Kind="Tec" Priority="Lo">
						<pm:Type Code="197532">
							<pm:ConceptDescription Version="0" Ref="ref:0x26b:210"/>
						</pm:Type>
						<pm:Source>SPO2.Channel.2E.3EA1</pm:Source>
						</pm:AlertCondition>
						<pm:AlertCondition Handle="AC.DISTURB.SpO2.Measuredvalue.2F.44A5.63172" SafetyClassification="MedA" Kind="Tec" Priority="None">
						<pm:Type Code="196632">
							<pm:ConceptDescription Version="0" Ref="ref:0x26b:216"/>
						</pm:Type>
						<pm:Source>SpO2.Measuredvalue.2F.44A5</pm:Source>
						</pm:AlertCondition>
						<pm:AlertCondition Handle="AC.INTERF.SPO2.Channel.2E.3EA1.64819" SafetyClassification="MedA" Kind="Tec" Priority="Lo">
						<pm:Type Code="196662">
							<pm:ConceptDescription Version="0" Ref="ref:0x26b:230"/>
						</pm:Type>
						<pm:Source>SPO2.Channel.2E.3EA1</pm:Source>
						</pm:AlertCondition>
						<pm:AlertCondition Handle="AC.SPO2LOWPERFUSION.SPO2.Channel.2E.3EA1.2356" SafetyClassification="MedA" Kind="Tec" Priority="None">
						<pm:Type Code="198066">
							<pm:ConceptDescription Version="0" Ref="ref:0x26b:234"/>
						</pm:Type>
						<pm:Source>SPO2.Channel.2E.3EA1</pm:Source>
						</pm:AlertCondition>
						<pm:AlertCondition Handle="AC.SPO2PULSESEARCH.SPO2.Channel.2E.3EA1.16441" SafetyClassification="MedA" Kind="Tec" Priority="None">
						<pm:Type Code="198070">
							<pm:ConceptDescription Version="0" Ref="ref:0x26b:244"/>
						</pm:Type>
						<pm:Source>SPO2.Channel.2E.3EA1</pm:Source>
						</pm:AlertCondition>
						<pm:AlertCondition Handle="AC.CABLEDISCONN.Pulseoximeter.VMD.2D.3505.51923" SafetyClassification="MedA" Kind="Tec" Priority="Me">
						<pm:Type Code="197512">
							<pm:ConceptDescription Version="0" Ref="ref:0x26b:8172"/>
						</pm:Type>
						<pm:Source>Pulseoximeter.VMD.2D.3505</pm:Source>
						</pm:AlertCondition>
						<pm:AlertCondition Handle="AC.CABLEDISCONN.SPO2.Channel.2E.3EA1.60209" SafetyClassification="MedA" Kind="Tec" Priority="Lo">
						<pm:Type Code="197512">
							<pm:ConceptDescription Version="0" Ref="ref:0x26b:246"/>
						</pm:Type>
						<pm:Source>SPO2.Channel.2E.3EA1</pm:Source>
						</pm:AlertCondition>
					</pm:AlertSystem>
					<pm:Sco Handle="Sco.Pulseoximeter.VMD.2D.3505">
						<pm:Operation Handle="SetValue.SETLOWERALARMLIMIT.Limit.DESAT.SpO2.Measuredvalue.2F.44A5.39663.54391" xsi:type="pm:SetValueOperationDescriptor" SafetyClassification="MedC" OperationTarget="Limit.DESAT.SpO2.Measuredvalue.2F.44A5.39663" MaxTimeToFinish="PT2S" Retriggerable="false" AccessLevel="Usr">
						<ext:Extension>
							<pme:InvocationPerformedFrom ext:MustUnderstand="true" Vicinity="ImmediateVicinity"/>
							<pme:InvocationPerformedFrom ext:MustUnderstand="true" Vicinity="CloseVicinity"/>
							<pme:InvocationPerformedFrom ext:MustUnderstand="true" Vicinity="ActionableVicinity"/>
							<pme:InvocationPerformedFrom ext:MustUnderstand="true" Vicinity="Remote"/>
						</ext:Extension>
						<pm:Type Code="128251">
							<pm:ConceptDescription Version="0" Ref="ref:0x260:3466"/>
							<pm:Translation Code="128251" CodingSystem="urn:oid:1.3.6.1.4.1.3592.2.1.2.1"/>
						</pm:Type>
						</pm:Operation>
						<pm:Operation Handle="SetValue.SETLOWERALARMLIMIT.Limit.LOLTLIM.SpO2.Measuredvalue.2F.44A5.36029.16197" xsi:type="pm:SetValueOperationDescriptor" SafetyClassification="MedC" OperationTarget="Limit.LOLTLIM.SpO2.Measuredvalue.2F.44A5.36029" MaxTimeToFinish="PT2S" Retriggerable="false" AccessLevel="Usr">
						<ext:Extension>
							<pme:InvocationPerformedFrom ext:MustUnderstand="true" Vicinity="ImmediateVicinity"/>
							<pme:InvocationPerformedFrom ext:MustUnderstand="true" Vicinity="CloseVicinity"/>
							<pme:InvocationPerformedFrom ext:MustUnderstand="true" Vicinity="ActionableVicinity"/>
							<pme:InvocationPerformedFrom ext:MustUnderstand="true" Vicinity="Remote"/>
						</ext:Extension>
						<pm:Type Code="128251">
							<pm:ConceptDescription Version="0" Ref="ref:0x260:3466"/>
							<pm:Translation Code="128251" CodingSystem="urn:oid:1.3.6.1.4.1.3592.2.1.2.1"/>
						</pm:Type>
						</pm:Operation>
						<pm:Operation Handle="SetValue.SETLOWERALARMLIMIT.Limit.LOLTLIM.PLS.Measuredvalue.30.BC7.48321.28489" xsi:type="pm:SetValueOperationDescriptor" SafetyClassification="MedC" OperationTarget="Limit.LOLTLIM.PLS.Measuredvalue.30.BC7.48321" MaxTimeToFinish="PT2S" Retriggerable="false" AccessLevel="Usr">
						<ext:Extension>
							<pme:InvocationPerformedFrom ext:MustUnderstand="true" Vicinity="ImmediateVicinity"/>
							<pme:InvocationPerformedFrom ext:MustUnderstand="true" Vicinity="CloseVicinity"/>
							<pme:InvocationPerformedFrom ext:MustUnderstand="true" Vicinity="ActionableVicinity"/>
							<pme:InvocationPerformedFrom ext:MustUnderstand="true" Vicinity="Remote"/>
						</ext:Extension>
						<pm:Type Code="128251">
							<pm:ConceptDescription Version="0" Ref="ref:0x260:3466"/>
							<pm:Translation Code="128251" CodingSystem="urn:oid:1.3.6.1.4.1.3592.2.1.2.1"/>
						</pm:Type>
						</pm:Operation>
						<pm:Operation Handle="SetValue.SETUPPERALARMLIMIT.Limit.HIGTLIM.SpO2.Measuredvalue.2F.44A5.28347.15172" xsi:type="pm:SetValueOperationDescriptor" SafetyClassification="MedC" OperationTarget="Limit.HIGTLIM.SpO2.Measuredvalue.2F.44A5.28347" MaxTimeToFinish="PT2S" Retriggerable="false" AccessLevel="Usr">
						<ext:Extension>
							<pme:InvocationPerformedFrom ext:MustUnderstand="true" Vicinity="ImmediateVicinity"/>
							<pme:InvocationPerformedFrom ext:MustUnderstand="true" Vicinity="CloseVicinity"/>
							<pme:InvocationPerformedFrom ext:MustUnderstand="true" Vicinity="ActionableVicinity"/>
							<pme:InvocationPerformedFrom ext:MustUnderstand="true" Vicinity="Remote"/>
						</ext:Extension>
						<pm:Type Code="128250">
							<pm:ConceptDescription Version="0" Ref="ref:0x260:13452"/>
							<pm:Translation Code="128250" CodingSystem="urn:oid:1.3.6.1.4.1.3592.2.1.2.1"/>
						</pm:Type>
						</pm:Operation>
						<pm:Operation Handle="SetValue.SETUPPERALARMLIMIT.Limit.HIGTLIM.PLS.Measuredvalue.30.BC7.44480.31305" xsi:type="pm:SetValueOperationDescriptor" SafetyClassification="MedC" OperationTarget="Limit.HIGTLIM.PLS.Measuredvalue.30.BC7.44480" MaxTimeToFinish="PT2S" Retriggerable="false" AccessLevel="Usr">
						<ext:Extension>
							<pme:InvocationPerformedFrom ext:MustUnderstand="true" Vicinity="ImmediateVicinity"/>
							<pme:InvocationPerformedFrom ext:MustUnderstand="true" Vicinity="CloseVicinity"/>
							<pme:InvocationPerformedFrom ext:MustUnderstand="true" Vicinity="ActionableVicinity"/>
							<pme:InvocationPerformedFrom ext:MustUnderstand="true" Vicinity="Remote"/>
						</ext:Extension>
						<pm:Type Code="128250">
							<pm:ConceptDescription Version="0" Ref="ref:0x260:13452"/>
							<pm:Translation Code="128250" CodingSystem="urn:oid:1.3.6.1.4.1.3592.2.1.2.1"/>
						</pm:Type>
						</pm:Operation>
						<pm:Operation Handle="Activate.AUTOADJUSTALARMLIMITS.SpO2.Measuredvalue.2F.44A5.21400" xsi:type="pm:ActivateOperationDescriptor" SafetyClassification="MedC" OperationTarget="SpO2.Measuredvalue.2F.44A5" MaxTimeToFinish="PT2S" Retriggerable="false" AccessLevel="Usr">
						<ext:Extension>
							<pme:InvocationPerformedFrom ext:MustUnderstand="true" Vicinity="ImmediateVicinity"/>
							<pme:InvocationPerformedFrom ext:MustUnderstand="true" Vicinity="CloseVicinity"/>
							<pme:InvocationPerformedFrom ext:MustUnderstand="true" Vicinity="ActionableVicinity"/>
							<pme:InvocationPerformedFrom ext:MustUnderstand="true" Vicinity="Remote"/>
						</ext:Extension>
						<pm:Type Code="128252">
							<pm:ConceptDescription Version="0" Ref="ref:0x260:3468"/>
							<pm:Translation Code="128252" CodingSystem="urn:oid:1.3.6.1.4.1.3592.2.1.2.1"/>
						</pm:Type>
						</pm:Operation>
						<pm:Operation Handle="Activate.AUTOADJUSTALARMLIMITS.PLS.Measuredvalue.30.BC7.21657" xsi:type="pm:ActivateOperationDescriptor" SafetyClassification="MedC" OperationTarget="PLS.Measuredvalue.30.BC7" MaxTimeToFinish="PT2S" Retriggerable="false" AccessLevel="Usr">
						<ext:Extension>
							<pme:InvocationPerformedFrom ext:MustUnderstand="true" Vicinity="ImmediateVicinity"/>
							<pme:InvocationPerformedFrom ext:MustUnderstand="true" Vicinity="CloseVicinity"/>
							<pme:InvocationPerformedFrom ext:MustUnderstand="true" Vicinity="ActionableVicinity"/>
							<pme:InvocationPerformedFrom ext:MustUnderstand="true" Vicinity="Remote"/>
						</ext:Extension>
						<pm:Type Code="128252">
							<pm:ConceptDescription Version="0" Ref="ref:0x260:3468"/>
							<pm:Translation Code="128252" CodingSystem="urn:oid:1.3.6.1.4.1.3592.2.1.2.1"/>
						</pm:Type>
						</pm:Operation>
						<pm:Operation Handle="Activate..Limit.DESAT.SpO2.Measuredvalue.2F.44A5.39663.16763" xsi:type="pm:ActivateOperationDescriptor" SafetyClassification="MedA" OperationTarget="Limit.DESAT.SpO2.Measuredvalue.2F.44A5.39663" MaxTimeToFinish="PT2S" Retriggerable="false" AccessLevel="Usr">
						<ext:Extension>
							<pme:InvocationPerformedFrom ext:MustUnderstand="true" Vicinity="ImmediateVicinity"/>
							<pme:InvocationPerformedFrom ext:MustUnderstand="true" Vicinity="CloseVicinity"/>
							<pme:InvocationPerformedFrom ext:MustUnderstand="true" Vicinity="ActionableVicinity"/>
							<pme:InvocationPerformedFrom ext:MustUnderstand="true" Vicinity="Remote"/>
						</ext:Extension>
						<pm:Type Code="128255">
							<pm:ConceptDescription Version="0" Ref="ref:0x260:3474"/>
							<pm:Translation Code="128255" CodingSystem="urn:oid:1.3.6.1.4.1.3592.2.1.2.1"/>
						</pm:Type>
						</pm:Operation>
						<pm:Operation Handle="Activate.DE.Limit.DESAT.SpO2.Measuredvalue.2F.44A5.39663.23676" xsi:type="pm:ActivateOperationDescriptor" SafetyClassification="MedC" OperationTarget="Limit.DESAT.SpO2.Measuredvalue.2F.44A5.39663" MaxTimeToFinish="PT2S" Retriggerable="false" AccessLevel="Usr">
						<ext:Extension>
							<pme:InvocationPerformedFrom ext:MustUnderstand="true" Vicinity="ImmediateVicinity"/>
							<pme:InvocationPerformedFrom ext:MustUnderstand="true" Vicinity="CloseVicinity"/>
							<pme:InvocationPerformedFrom ext:MustUnderstand="true" Vicinity="ActionableVicinity"/>
							<pme:InvocationPerformedFrom ext:MustUnderstand="true" Vicinity="Remote"/>
						</ext:Extension>
						<pm:Type Code="128254">
							<pm:ConceptDescription Version="0" Ref="ref:0x260:3472"/>
							<pm:Translation Code="128254" CodingSystem="urn:oid:1.3.6.1.4.1.3592.2.1.2.1"/>
						</pm:Type>
						</pm:Operation>
						<pm:Operation Handle="Activate.LIMITALARMMONITORING.SpO2.Measuredvalue.2F.44A5.25549" xsi:type="pm:ActivateOperationDescriptor" SafetyClassification="MedA" OperationTarget="SpO2.Measuredvalue.2F.44A5" MaxTimeToFinish="PT2S" Retriggerable="false" AccessLevel="Usr">
						<ext:Extension>
							<pme:InvocationPerformedFrom ext:MustUnderstand="true" Vicinity="ImmediateVicinity"/>
							<pme:InvocationPerformedFrom ext:MustUnderstand="true" Vicinity="CloseVicinity"/>
							<pme:InvocationPerformedFrom ext:MustUnderstand="true" Vicinity="ActionableVicinity"/>
							<pme:InvocationPerformedFrom ext:MustUnderstand="true" Vicinity="Remote"/>
						</ext:Extension>
						<pm:Type Code="129039">
							<pm:ConceptDescription Version="0" Ref="ref:0x260:13468"/>
							<pm:Translation Code="129039" CodingSystem="urn:oid:1.3.6.1.4.1.3592.2.1.2.1"/>
						</pm:Type>
						</pm:Operation>
						<pm:Operation Handle="Activate.LIMITALARMMONITORING.PLS.Measuredvalue.30.BC7.25806" xsi:type="pm:ActivateOperationDescriptor" SafetyClassification="MedA" OperationTarget="PLS.Measuredvalue.30.BC7" MaxTimeToFinish="PT2S" Retriggerable="false" AccessLevel="Usr">
						<ext:Extension>
							<pme:InvocationPerformedFrom ext:MustUnderstand="true" Vicinity="ImmediateVicinity"/>
							<pme:InvocationPerformedFrom ext:MustUnderstand="true" Vicinity="CloseVicinity"/>
							<pme:InvocationPerformedFrom ext:MustUnderstand="true" Vicinity="ActionableVicinity"/>
							<pme:InvocationPerformedFrom ext:MustUnderstand="true" Vicinity="Remote"/>
						</ext:Extension>
						<pm:Type Code="129039">
							<pm:ConceptDescription Version="0" Ref="ref:0x260:13468"/>
							<pm:Translation Code="129039" CodingSystem="urn:oid:1.3.6.1.4.1.3592.2.1.2.1"/>
						</pm:Type>
						</pm:Operation>
						<pm:Operation Handle="Activate.DELIMITALARMMONITORING.SpO2.Measuredvalue.2F.44A5.28878" xsi:type="pm:ActivateOperationDescriptor" SafetyClassification="MedC" OperationTarget="SpO2.Measuredvalue.2F.44A5" MaxTimeToFinish="PT2S" Retriggerable="false" AccessLevel="Usr">
						<ext:Extension>
							<pme:InvocationPerformedFrom ext:MustUnderstand="true" Vicinity="ImmediateVicinity"/>
							<pme:InvocationPerformedFrom ext:MustUnderstand="true" Vicinity="CloseVicinity"/>
							<pme:InvocationPerformedFrom ext:MustUnderstand="true" Vicinity="ActionableVicinity"/>
							<pme:InvocationPerformedFrom ext:MustUnderstand="true" Vicinity="Remote"/>
						</ext:Extension>
						<pm:Type Code="129040">
							<pm:ConceptDescription Version="0" Ref="ref:0x260:13469"/>
							<pm:Translation Code="129040" CodingSystem="urn:oid:1.3.6.1.4.1.3592.2.1.2.1"/>
						</pm:Type>
						</pm:Operation>
						<pm:Operation Handle="Activate.DELIMITALARMMONITORING.PLS.Measuredvalue.30.BC7.29135" xsi:type="pm:ActivateOperationDescriptor" SafetyClassification="MedC" OperationTarget="PLS.Measuredvalue.30.BC7" MaxTimeToFinish="PT2S" Retriggerable="false" AccessLevel="Usr">
						<ext:Extension>
							<pme:InvocationPerformedFrom ext:MustUnderstand="true" Vicinity="ImmediateVicinity"/>
							<pme:InvocationPerformedFrom ext:MustUnderstand="true" Vicinity="CloseVicinity"/>
							<pme:InvocationPerformedFrom ext:MustUnderstand="true" Vicinity="ActionableVicinity"/>
							<pme:InvocationPerformedFrom ext:MustUnderstand="true" Vicinity="Remote"/>
						</ext:Extension>
						<pm:Type Code="129040">
							<pm:ConceptDescription Version="0" Ref="ref:0x260:13469"/>
							<pm:Translation Code="129040" CodingSystem="urn:oid:1.3.6.1.4.1.3592.2.1.2.1"/>
						</pm:Type>
						</pm:Operation>
					</pm:Sco>
					<pm:Channel Handle="SPO2.Channel.2E.3EA1" SafetyClassification="MedA">
						<pm:Type Code="69643">
						<pm:ConceptDescription Version="0" Ref="ref:0x263:3041"/>
						</pm:Type>
						<pm:Metric Handle="SpO2.Measuredvalue.2F.44A5" SafetyClassification="MedA" xsi:type="pm:NumericMetricDescriptor" MetricCategory="Msrmt" MetricAvailability="Cont" DeterminationPeriod="PT30S" MaxDelayTime="PT2S" LifeTimePeriod="PT2.5S" DerivationMethod="Auto" Resolution="1">
						<pm:Type Code="150456">
							<pm:ConceptDescription Version="0" Ref="ref:0x263:1127"/>
						</pm:Type>
						<pm:Unit Code="262688">
							<pm:ConceptDescription Version="0" Ref="ref:0x260:11598"/>
						</pm:Unit>
						<pm:TechnicalRange Upper="100" Lower="20" StepWidth="1"/>
						</pm:Metric>
						<pm:Metric Handle="PLS.Measuredvalue.30.BC7" SafetyClassification="MedA" xsi:type="pm:NumericMetricDescriptor" MetricCategory="Msrmt" MetricAvailability="Cont" DeterminationPeriod="PT30S" MaxDelayTime="PT2S" LifeTimePeriod="PT2.5S" DerivationMethod="Auto" Resolution="1">
						<pm:Type Code="149530">
							<pm:ConceptDescription Version="0" Ref="ref:0x263:935"/>
						</pm:Type>
						<pm:Unit Code="264864">
							<pm:ConceptDescription Version="0" Ref="ref:0x260:11820"/>
						</pm:Unit>
						<pm:TechnicalRange Upper="239" Lower="26" StepWidth="1"/>
						</pm:Metric>
						<pm:Metric Handle="PI.Calculatedvalue.32.32D0" SafetyClassification="MedA" xsi:type="pm:NumericMetricDescriptor" MetricCategory="Clc" MetricAvailability="Cont" DeterminationPeriod="PT30S" MaxDelayTime="PT2S" LifeTimePeriod="PT2.5S" DerivationMethod="Auto" Resolution="0.01">
						<pm:Type Code="150488">
							<pm:ConceptDescription Version="0" Ref="ref:0x263:1734"/>
						</pm:Type>
						<pm:Unit Code="262688">
							<pm:ConceptDescription Version="0" Ref="ref:0x260:11598"/>
						</pm:Unit>
						<pm:TechnicalRange Upper="20" Lower="0" StepWidth="0.01"/>
						</pm:Metric>
						<pm:Metric Handle="SpO2.Realtimecurve.31.DB6" SafetyClassification="MedA" xsi:type="pm:RealTimeSampleArrayMetricDescriptor" MetricCategory="Msrmt" MetricAvailability="Cont" DeterminationPeriod="PT0.2S" MaxDelayTime="PT1S" LifeTimePeriod="PT0.25S" DerivationMethod="Auto" Resolution="0.05" SamplePeriod="PT0.01S">
						<pm:Type Code="150452">
							<pm:ConceptDescription Version="0" Ref="ref:0x263:6373"/>
						</pm:Type>
						<pm:Unit Code="262656">
							<pm:ConceptDescription Version="0" Ref="ref:0x260:11552"/>
						</pm:Unit>
						<pm:TechnicalRange Upper="124" Lower="-124" StepWidth="0.05"/>
						</pm:Metric>
						<pm:Metric Handle="Color.Setting.CCE.4040" SafetyClassification="MedA" xsi:type="pm:EnumStringMetricDescriptor" MetricCategory="Set" MetricAvailability="Intr" MaxDelayTime="PT5S" DerivationMethod="Man">
						<pm:Type Code="16972163">
							<pm:ConceptDescription Version="0" Ref="ref:0x260:14637"/>
							<pm:Translation Code="16972163" CodingSystem="urn:oid:1.3.6.1.4.1.3592.2.1.2.1"/>
						</pm:Type>
						<pm:Unit Code="262656">
							<pm:ConceptDescription Version="0" Ref="ref:0x260:11552"/>
						</pm:Unit>
						<pm:AllowedValue>
							<pm:Value>CONTRAST</pm:Value>
							<pm:Type Code="194800">
							<pm:ConceptDescription Version="0" Ref="ref:0x260:14315"/>
							<pm:Translation Code="194800" CodingSystem="urn:oid:1.3.6.1.4.1.3592.2.1.2.1"/>
							</pm:Type>
						</pm:AllowedValue>
						<pm:AllowedValue>
							<pm:Value>TURQUOISE</pm:Value>
							<pm:Type Code="194801">
							<pm:ConceptDescription Version="0" Ref="ref:0x260:14346"/>
							<pm:Translation Code="194801" CodingSystem="urn:oid:1.3.6.1.4.1.3592.2.1.2.1"/>
							</pm:Type>
						</pm:AllowedValue>
						<pm:AllowedValue>
							<pm:Value>BLUE</pm:Value>
							<pm:Type Code="194793">
							<pm:ConceptDescription Version="0" Ref="ref:0x260:14325"/>
							<pm:Translation Code="194793" CodingSystem="urn:oid:1.3.6.1.4.1.3592.2.1.2.1"/>
							</pm:Type>
						</pm:AllowedValue>
						<pm:AllowedValue>
							<pm:Value>RED</pm:Value>
							<pm:Type Code="194791">
							<pm:ConceptDescription Version="0" Ref="ref:0x260:14337"/>
							<pm:Translation Code="194791" CodingSystem="urn:oid:1.3.6.1.4.1.3592.2.1.2.1"/>
							</pm:Type>
						</pm:AllowedValue>
						<pm:AllowedValue>
							<pm:Value>GREEN</pm:Value>
							<pm:Type Code="194794">
							<pm:ConceptDescription Version="0" Ref="ref:0x260:14331"/>
							<pm:Translation Code="194794" CodingSystem="urn:oid:1.3.6.1.4.1.3592.2.1.2.1"/>
							</pm:Type>
						</pm:AllowedValue>
						<pm:AllowedValue>
							<pm:Value>PINK</pm:Value>
							<pm:Type Code="194797">
							<pm:ConceptDescription Version="0" Ref="ref:0x260:14322"/>
							<pm:Translation Code="194797" CodingSystem="urn:oid:1.3.6.1.4.1.3592.2.1.2.1"/>
							</pm:Type>
						</pm:AllowedValue>
						<pm:AllowedValue>
							<pm:Value>PURPLE</pm:Value>
							<pm:Type Code="194798">
							<pm:ConceptDescription Version="0" Ref="ref:0x260:14319"/>
							<pm:Translation Code="194798" CodingSystem="urn:oid:1.3.6.1.4.1.3592.2.1.2.1"/>
							</pm:Type>
						</pm:AllowedValue>
						<pm:AllowedValue>
							<pm:Value>YELLOW</pm:Value>
							<pm:Type Code="194792">
							<pm:ConceptDescription Version="0" Ref="ref:0x260:14334"/>
							<pm:Translation Code="194792" CodingSystem="urn:oid:1.3.6.1.4.1.3592.2.1.2.1"/>
							</pm:Type>
						</pm:AllowedValue>
						<pm:AllowedValue>
							<pm:Value>ORANGE</pm:Value>
							<pm:Type Code="194795">
							<pm:ConceptDescription Version="0" Ref="ref:0x260:14328"/>
							<pm:Translation Code="194795" CodingSystem="urn:oid:1.3.6.1.4.1.3592.2.1.2.1"/>
							</pm:Type>
						</pm:AllowedValue>
						</pm:Metric>
					</pm:Channel>
				</pm:Vmd>

				<pm:Vmd Handle="vmd1" SafetyClassification="MedA">
					<pm:Type Code="130736"> <!-- 1:65.200 -->
						<pm:ConceptDescription Lang="en-US">settable metrics</pm:ConceptDescription>
					</pm:Type>
					<pm:Sco Handle="sco.vmd1.mds0">
						<pm:Operation Handle="actop.vmd1_sco_0"
							xsi:type="pm:ActivateOperationDescriptor"
							SafetyClassification="MedC" OperationTarget="mds0"
							MaxTimeToFinish="PT1S" Retriggerable="true" AccessLevel="Usr">
							<pm:Type Code="196279"> <!-- 2:65.207 -->
								<pm:ConceptDescription Lang="en-US">dummy activate operation</pm:ConceptDescription>
							</pm:Type>
						</pm:Operation>
						
						<pm:Operation
							xsi:type="pm:SetValueOperationDescriptor"
							Handle="numeric.ch0.vmd1_sco_0"
							OperationTarget="numeric.ch0.vmd1" SafetyClassification="MedA"
							MaxTimeToFinish="PT1S" Retriggerable="true" AccessLevel="Usr">
							<pm:Type Code="196276"> <!-- 2:65.204 -->
								<pm:ConceptDescription Lang="en-US">set numeric metric value</pm:ConceptDescription>
							</pm:Type>
						</pm:Operation>

						<pm:Operation
							xsi:type="pm:SetStringOperationDescriptor"
							Handle="enumstring.ch0.vmd1_sco_0"
							OperationTarget="enumstring.ch0.vmd1" SafetyClassification="MedA"
							MaxTimeToFinish="PT1S" Retriggerable="true" AccessLevel="Usr">
							<pm:Type Code="196277"> <!-- 2:65.205 -->
								<pm:ConceptDescription Lang="en-US">set enum string metric value</pm:ConceptDescription>
							</pm:Type>
						</pm:Operation>
						
						<pm:Operation
							xsi:type="pm:SetStringOperationDescriptor"
							Handle="string.ch0.vmd1_sco_0"
							OperationTarget="string.ch0.vmd1" SafetyClassification="MedA"
							MaxTimeToFinish="PT1S" Retriggerable="true" AccessLevel="Usr">
							<pm:Type Code="196278"> <!-- 2:65.206 -->
								<pm:ConceptDescription Lang="en-US">set string metric value</pm:ConceptDescription>
							</pm:Type>
						</pm:Operation>
					</pm:Sco>
					<!-- this is the channel grouping the settable metrics -->
					<pm:Channel Handle="ch0.vmd1"
						SafetyClassification="MedA">
						<pm:Type Code="130737"> <!-- 1:65.201 -->
							<pm:ConceptDescription Lang="en-US">settable metrics</pm:ConceptDescription>
						</pm:Type>
						<pm:Metric Handle="numeric.ch0.vmd1"
							SafetyClassification="MedA" xsi:type="pm:NumericMetricDescriptor"
							MetricCategory="Set" MetricAvailability="Intr" Resolution="0.1">
							<pm:Type Code="196274"> <!-- 2:65.202 -->
								<pm:ConceptDescription Lang="en-US">dummy settable numeric metric</pm:ConceptDescription>
							</pm:Type>
							<pm:Unit Code="262656"> <!-- MDC_DIM_DIMLESS = 4:512 -->
								<pm:ConceptDescription Lang="en-US">no unit</pm:ConceptDescription>
							</pm:Unit>
							<pm:TechnicalRange Upper="100" Lower="1"
								StepWidth="1" />
						</pm:Metric>

						<pm:Metric Handle="enumstring.ch0.vmd1"
							SafetyClassification="MedA"
							xsi:type="pm:EnumStringMetricDescriptor" MetricCategory="Set"
							MetricAvailability="Intr">
							<pm:Type Code="196275"> <!-- 2:65.203 -->
								<pm:ConceptDescription Lang="en-US">dummy settable enum string metric</pm:ConceptDescription>
							</pm:Type>
							<pm:Unit Code="262656"> <!-- MDC_DIM_DIMLESS = 4:512 -->
								<pm:ConceptDescription Lang="en-US">no unit</pm:ConceptDescription>
							</pm:Unit>
							<pm:AllowedValue>
								<pm:Value>ON</pm:Value>
								<pm:Type Code="192834">
									<pm:ConceptDescription Lang="en-US">ON</pm:ConceptDescription>
								</pm:Type>
							</pm:AllowedValue>
							<pm:AllowedValue>
								<pm:Value>OFF</pm:Value>
								<pm:Type Code="192835">
									<pm:ConceptDescription Lang="en-US">OFF</pm:ConceptDescription>
								</pm:Type>
							</pm:AllowedValue>
						</pm:Metric>

						<pm:Metric Handle="string.ch0.vmd1"
							SafetyClassification="MedA" xsi:type="pm:StringMetricDescriptor"
							MetricCategory="Set" MetricAvailability="Intr">
							<pm:Type Code="196276"> <!-- 2:65.204 -->
								<pm:ConceptDescription Lang="en-US">dummy settable string metric</pm:ConceptDescription>
							</pm:Type>
							<pm:Unit Code="262656"> <!-- MDC_DIM_DIMLESS = 4:512 -->
								<pm:ConceptDescription Lang="en-US">no unit</pm:ConceptDescription>
							</pm:Unit>
						</pm:Metric>
					</pm:Channel>
				</pm:Vmd>
			</pm:Mds>
		</pm:MdDescription>
	</msg:Mdib>
</msg:GetMdibResponse>